PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = 1.0000, 1.0000, 1.0000
  expName = смиролор
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    KeyboardComponent key_resp
      allowedKeys = 's','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.65
      store = all keys
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    ImageComponent image
      image [set every repeat] = $Stimul
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.65
      text = ?
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  Routine instruction
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    TextComponent instruction_text
      color = 0, 0, 0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        У цьому експерименті Вам буде протягом короткого часу представлене коло певного кольору. Після демонстрації фігури на екрані з'явиться знак питяння.
        Натисніть'S', якщо вважаєте,що коло було ближче до СИНЬОГО кольору.
        Натисніть 'L', якщо вважаєте,що коло було ближче до ФІОЛЕТОВОГО кольору.
        Будь ласка намагайтесь відповідати швидко і чітко.
        Натисніть будь яку клавішу,щоб розпочати
    KeyboardComponent stop_instruction
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine Pause
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    TextComponent text
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли перший блок. Залишилось всього сім. У Вас є час перепочити 20 секунд.
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    TextComponent Text_continius
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Exit
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    ImageComponent image_2
      color = -1.0000, -1.0000, -1.0000
      image = https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%BA%D0%B0%D1%808.jpg?raw=true
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Pause2
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    TextComponent Text_pause2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли другий блок. Залишилось всього шість. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause3
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    TextComponent Text_pause3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли третій блок. Залишилось всього п'ять. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause4
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    TextComponent Text_pause4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли четвертий блок. Залишилось всього чотири. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause5
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    TextComponent Text_pause5
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли п'ятий блок. Залишилось всього три. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause5
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause6
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    TextComponent Text_pause6
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли шостий блок. Залишилось всього два. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause6
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause7
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    TextComponent Text_cont_pause7
      letterHeight = 0.05
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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    TextComponent text_pause_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли сьомий блок. Залишився всього один. У Вас є час перепочити 20 секунд.
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Flow
  Routine instruction
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = Stimul_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A2.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A3.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 4', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A4.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 5', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A5.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 6', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A6.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A7.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A8.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A9.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A10.jpg?raw=true', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_1
  Routine Pause
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Stimul_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A2.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A3.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 4', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A4.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 5', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A5.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 6', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A6.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A7.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A8.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A9.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A10.jpg?raw=true', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_2
  Routine Pause2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Stimul_3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A2.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A3.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A7.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A8.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A9.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A10.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A11.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A12.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A16.jpg?raw=true', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_3
  Routine Pause3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Stimul_4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A2.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A9.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A10.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A11.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A12.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A16.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A17.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A18.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A19.jpg?raw=true', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_4
  Routine Pause4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = Stimul_5.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A10.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A11.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A12.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A18.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A19.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A26.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A27.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 28', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A28.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 29', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A29.jpg?raw=true', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_5
  Routine Pause5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = Stimul_6.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A10.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A11.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A12.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A18.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A19.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A26.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A27.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 28', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A28.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 29', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A29.jpg?raw=true', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_6
  Routine Pause6
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = Stimul_7.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A12.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A18.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A37.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A38.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A45.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Blue 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A52.jpg?raw=true', 'Color': 'Blue'},
      {'Name': 'Blue 2', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A53.jpg?raw=true', 'Color': 'Blue'},
      {'Name': 'Blue 3', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A54.jpg?raw=true', 'Color': 'Blue'},
      {'Name': 'Blue 4', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A55.jpg?raw=true', 'Color': 'Blue'}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
    Routine trial
  LoopTerminator trials_7
  Routine Pause7
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = Stimul_8.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A1.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A12.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A18.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A37.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A38.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A45.jpg?raw=true', 'Color': 'Purple'},
      {'Name': 'Blue 1', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A52.jpg?raw=true', 'Color': 'Blue'},
      {'Name': 'Blue 2', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A53.jpg?raw=true', 'Color': 'Blue'},
      {'Name': 'Blue 3', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A54.jpg?raw=true', 'Color': 'Blue'},
      {'Name': 'Blue 4', 'Stimul': 'https://github.com/nastycify/ColorDotsExperiment5/blob/master/static/%D0%9A55.jpg?raw=true', 'Color': 'Blue'}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
    Routine trial
  LoopTerminator trials_8
  Routine Exit
